CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Drag and drop the renamed onto the large white box below.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['This module will extract information describing the images (i.e, metadata) which will be stored along with your measurements. This information is contained in the file and folder names.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<plateName>.*)[-][-](?P<compound>.*)[-][-](?P<concentration>.*)[-][-]W(?P<wellNum>.*)[-][-]P(?P<posNum>.*)[-][-]T(?P<timeNum>.*)[-][-]C(?P<Channel>.*).tif$
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<imageBaseName>.*)[-][-].*[.].*$
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:^(?P<pathBase>.*)[\\/](?P<platePath>.*)[\\/](?P<wellPath>.*)[\\/](?P<posPath>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['This module assigns the name "calceinRGB" to each raw image. This is the name whereby raw images will be referred to within CellProfiler.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does containregexp ".*--C00(?:\\.ome)??.tif$")
    Name to assign these images:calceinRGB
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['This module groups groups images well/by/well, thereby enabling a global analysis of each time lapse.']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:wellNum

ColorToGray:[module_num:5|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notes:['Split RGB images and keep only the green channel for further analysis.']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
    Select the input image:calceinRGB
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:calcein
    Convert blue to gray?:No
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
RescaleIntensity:[module_num:6|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notes:['Rescale grayvalues to the range [0 ~ 1]. This maximizes the dynamic range and facilitates segmentation.']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
    Select the input image:calcein
    Name the output image:calcein_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Segment organoids.']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
    Select the input image:calcein_rescaled
    Name the primary objects to be identified:organoids_prelim
    Typical diameter of objects, in pixel units (Min,Max):5,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.35
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
MeasureObjectIntensity:[module_num:8|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notes:['Quality control (I)', 'Measure fluorescence intensity on each organoid.']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
    Hidden:1
    Select an image to measure:calcein_rescaled
    Select objects to measure:organoids_prelim

MeasureObjectSizeShape:[module_num:9|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notes:['Quality control (II)', 'Measure shape features on each organoid.']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
    Select objects to measure:organoids_prelim
    Calculate the Zernike features?:No

DisplayDataOnImage:[module_num:10|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notes:['Quality control (III)', 'Dead organoids show small clumps of dissociated cells still reminiscent of the shape of an organoid and bright positive for calcein green. This phenotype can be measured in at least 2 ways:', '1) Higher than normal standard deviation of grayvalues in each organoid;', '2) Irregular organoid shape, with a jagged edge.', 'This module enables plotting any of the intensity- or shape-based features measured in the two previous modules on top of the corresponding organoid to inform on:', '1) Whether to discard dead organoids (if all organoids are viable, no quality control is necessary);', '2) Which image feature discriminates the best between alive and dead organoids;', '3) The threshold value.', '', 'In this demo dataset, the best discrimination between alive and dead organoids is achieved using the Form Factor, with dead organoids having a Form Factor ']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
    Display object or image measurements?:Object
    Select the input objects:organoids_prelim
    Measurement to display:AreaShape_FormFactor
    Select the image on which to display the measurements:calcein_rescaled
    Text color:red
    Name the output image that has the measurements displayed:QC_dataoverlay
    Font size (points):15
    Number of decimals:3
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
FilterObjects:[module_num:11|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notes:['Quality control (IV)', 'Exclude dead organoids from analysis.']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
    Select the objects to filter:organoids_prelim
    Name the output objects:organoids
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:calcein_rescaled
    Name the output image:QC_outlineoverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#00FF40
    Select objects to display:organoids

TrackObjects:[module_num:13|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notes:['Assign a unique label to each organoid throughout all time lapse frames.', 'An organoid which is not found in all 7 time frames (e.g. due to fluorescence loss or coalescence with another organoid) is labeled as "NaN".']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
    Choose a tracking method:Distance
    Select the objects to track:organoids
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    Maximum pixel distance to consider matches:4
    Select display option:Color Only
    Save color-coded image?:Yes
    Name the output image:organoids_tracked
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:6
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
MeasureObjectSizeShape:[module_num:14|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notes:['Measure the area of each organoid']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
    Select objects to measure:organoids
    Calculate the Zernike features?:No

CalculateMath:[module_num:15|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notes:['Calibrate image size: convert from pixel^2 units to micron^2 units', '! If the pixel pitch is 4.991 micron, multiply each area value by 4.991^2 = 24.910081']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
    Name the output measurement:area_micronsq
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:organoids
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:24.910081
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
SaveImages:[module_num:16|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notes:['Save segmentation masks']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
    Select the type of image to save:Image
    Select the image to save:organoids_tracked
    Select method for constructing file names:Single name
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    Enter single file name:\g<imageBaseName>--masks
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<platePath>--cellprofiler/\g<wellPath>/\g<posPath>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:17|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notes:['Save CSV files with all measurements and metadata']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|\g<platePath>--cellprofiler/\g<wellPath>/\g<posPath>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Metadata_posNum,Image|Metadata_FileLocation,Image|Metadata_wellNum,Image|Metadata_compound,Image|Metadata_timeNum,Image|Metadata_plateName,Image|Metadata_concentration,organoids|TrackObjects_Label_4,organoids|AreaShape_Center_Y,organoids|AreaShape_Center_X,organoids|Math_area_micronsq
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:organoids
    Combine these object measurements with those of the previous object?:No
    File name:objects.csv
    Use the object name for the file name?:No
